PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = child_task
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Routines
  Routine welcome_screen
    TextComponent text_welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please be still.

        Press the apostrophe key to start the task when not scanning.
    KeyboardComponent key_welcome
      allowedKeys = 'apostrophe'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response
    KeyboardComponent key_response
      allowedKeys = '5', '6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent text_response
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = 1   2   3   4   5
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  Routine end_screen
    TextComponent text_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Done.

        Please stay still.
  Routine image
    ImageComponent display_image
      image [set every repeat] = $imageFile
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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  Routine cue
    TextComponent text_cue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $textCue
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  Routine fixation
    TextComponent fixation_cross
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration
      text = +
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    CodeComponent code_setFixation
      Code Type = Py
      Begin Routine:
        fixation_duration = random() + .5
        thisExp.addData('fixation_duration', fixation_duration)
  Routine jitter
    TextComponent jitter_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_duration
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    CodeComponent code_setJitter
      Code Type = Py
      Begin Routine:
        jitter_duration = random() + .5
        thisExp.addData('jitter_duration', jitter_duration)
Flow
  Routine welcome_screen
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:61
    conditionsFile = image_simuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'images/myBaby/myBaby16.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby1.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby2.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby3.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby4.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby5.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby6.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby7.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby8.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby9.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby10.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby11.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby12.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby13.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby14.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby15.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby17.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby18.jpg'), ('condition', 'myBaby')])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
    Routine cue
    Routine jitter
    Routine image
    Routine response
    Routine fixation
  LoopTerminator trials
  Routine end_screen
